#  Dunmy confocal setup Qudi configuration file.
#
#
#
# IMPORTANT: The format of every 'module.Class' line has changed on 28.6.2015.
# =========  The class name now needs to be explicitly given here in the config.
#		  the config line must the form package.module.Class.ClassName
global:
    # list of modules to load when starting
    startup: ['man', 'tray', 'tasklogic']

    module_server:
        address: 'localhost'
        port: 12345

    ## For controlling the appearance of the GUI:
    stylesheet: 'qdark.qss'

hardware:

    mydummyscanner:
        module.Class: 'confocal_scanner_dummy.ConfocalScannerDummy'
        clock_frequency: 100
        connect:
            fitlogic: 'fitlogic'

logic:

    scannerlogic:
        module.Class: 'confocal_logic.ConfocalLogic'
        connect:
            confocalscanner1: 'scanner_tilt_interfuse'
            savelogic: 'savelogic'

    scanner_tilt_interfuse:
        module.Class: 'interfuse.scanner_tilt_interfuse.ScannerTiltInterfuse'
        connect:
            confocalscanner1: 'mydummyscanner'

    optimizerlogic:
        module.Class: 'optimizer_logic.OptimizerLogic'
        connect:
            confocalscanner1: 'scanner_tilt_interfuse'
            fitlogic: 'fitlogic'

    fitlogic:
        module.Class: 'fit_logic.FitLogic'
        #additional_fit_methods_path: 'C:\\Custom_dir'  # optional, can also be lists on several folders

    laserscannerlogic:
        module.Class: 'laser_scanner_logic.LaserScannerLogic'
        connect:
            confocalscanner1: 'mydummyscanner'
            savelogic: 'savelogic'
    
    tasklogic:
        module.Class: 'taskrunner.TaskRunner'
        tasks:
        #    dummytask:
        #        module: 'dummy'
        #        preposttasks: ['ppdummy']
        #    dummyinterruptor:
        #        module: 'dummy'
        #        pausetasks: ['dummytask']
        #        preposttasks: ['ppdummy2']
        #    ppdummy:
        #        module: 'prepostdummy'
        #    ppdummy2:
        #        module: 'prepostdummy'
            scannerLocationRefocus:
                module: 'refocus'
        #        preposttasks: ['fliplasermirror']
                pausetasks: ['scan', 'odmr']
                needsmodules:
                    optimizer: 'optimizerlogic'
        #        config:
        #            initial: [1, 1, 1]
        #    fliplasermirror:
        #        module: 'flipmirror'
        #        needsmodules:
        #            switchlogic: 'switch'
        #        config:
        #            sequence: [('mydummyswitch1', 1, True), ('mydummyswitch1', 2, True), ('mydummyswitch2', 1, True)]

    savelogic:
        module.Class: 'save_logic.SaveLogic'
        win_data_directory: 'C:/Data'   # DO NOT CHANGE THE DIRECTORY HERE! ONLY IN THE CUSTOM FILE!
        unix_data_directory: 'Data/'
        log_into_daily_directory: True
        save_pdf: True
        save_png: True

gui:
    tray:
        module.Class: 'trayicon.TrayIcon'

    man:
        module.Class: 'manager.managergui.ManagerGui'

    confocal:
        module.Class: 'confocal.confocalgui.ConfocalGui'
        connect:
            confocallogic1: 'scannerlogic'
            savelogic: 'savelogic'
            optimizerlogic1: 'optimizerlogic'
        fixed_aspect_ratio_xy: True
        fixed_aspect_ratio_depth: True
        slider_stepsize: 0.001  # in micrometer
        image_x_padding: 0.02
        image_y_padding: 0.02
        image_z_padding: 0.02
        default_meter_prefix: 'u'